PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '99', 'colourCode': '0'}
  Full-screen window = True
  HTML path = E:\OneDrive - Nexus365\Projects\TimeAndReward\task1\html
  Monitor = XB270H
  Resources = ['images/drums-3330642_1280.png', 'sounds/snare.wav', 'sounds/kick.wav', 'sounds/hihat.wav']
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = drumtrainer
  logging level = debug
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Before Experiment:
        targetKey = 'space'
      Begin Experiment:
        redXOpacity = 0
      Begin Routine:
        # Set feedback string for this trial
        trialTrigger = 0
        if iTrial == 0: # start of trial
            trialFeedbackColour = [0,0,0]
            trialFeedbackOpacity = 0
            trialTrigger = firstRespTrigger
            if not firstKeyCorrect:
                redXOpacity = 1
            else:
                redXOpacity = 0
        elif outcome == 0: # early
            #trialFeedbackColour = [(55-127.5)/127.5,(126-127.5)/127.5,(184-127.5)/127.5]
            trialFeedbackColour = earlyColour
            trialFeedbackOpacity = 1
            trialTrigger = earlyRespTrigger
        elif outcome == 1: # on time
            #trialFeedbackColour = [(255-127.5)/127.5,(127-127.5)/127.5,(0-127.5)/127.5]
            trialFeedbackColour = onTimeColour
            trialFeedbackOpacity = 1
            trialTrigger = onTimeTrigger
        elif outcome == 2: # late
            trialFeedbackColour = lateColour
            trialFeedbackOpacity = 1
            trialTrigger = lateRespTrigger

        # If red X is visible, make that the trigger (i.e. overwrite thisTrigger)
        if redXOpacity:
            trialTrigger = redXTrigger
            trialFeedbackOpacity = 0

        # Index of this/next trial
        iSeq = iTrial % 24 # Needed for current stim
        nextI = (iTrial+1) % 24 # Needed for next target response

        if thisBlockType in [0,1,4,5,8,9]:
            thisHihatVolume = hihatVols0[iSeq]
            thisSnareVolume= snareVols0[iSeq]
            thisBassVolume= bassVols0[iSeq]
            if snareVols0[nextI]:
                targetKey = key2
            else:
                targetKey = key1
        elif thisBlockType in [2,3,6,7,10,11]:
            thisHihatVolume = hihatVols1[iSeq]
            thisSnareVolume= snareVols1[iSeq]
            thisBassVolume= bassVols1[iSeq]
            if snareVols1[nextI]:
                targetKey = key2
            else:
                targetKey = key1
        else:
            print('error - block type not recognized')
            thisBassVolume = 0
            targetKey = ''

        trialLoop.addData('targetKey', targetKey)
        trialLoop.addData('trigger',trialTrigger)
      End Routine:
        # Add to data file
        trialLoop.addData('blockType', thisBlockType)
        trialLoop.addData('margin', targetMargins[thisBlockType])
        totalRT += deltaT
        meanRT = totalRT/(trialLoop.thisN+1)

        # Set feedback, based on previous trial's response, which will appear at the start of next trial
        if not trialResp.corr:
            redXOpacity = 1
        elif abs(deltaT - targetDuration) <= targetMargins[thisBlockType]:
            outcome = 1
            wasCorrect = 1
            totalPoints += 2
            roundPoints += 2
            redXOpacity = 0
        elif deltaT < targetDuration: # too early
            outcome = 0
            wasCorrect = 0
            totalPoints -= 1
            roundPoints -= 1
            redXOpacity = 0
        else: # too late
            outcome = 2
            wasCorrect = 0
            totalPoints -= 1
            roundPoints -= 1
            redXOpacity = 0

        # Add outcome to data file
        trialLoop.addData('outcome', outcome)

        # Adjust margins
        if abs(deltaT - targetDuration) <= targetMargins[thisBlockType]:
            isCorrect = 1
            targetMargins[thisBlockType] -= marginAdjust
        else:
            isCorrect = 0
            targetMargins[thisBlockType] += marginAdjust

        deltaT = t
        iTrial += 1
    ParallelOutComponent trialPort
      address = 0xD050
      startData = trialTrigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = True
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    PolygonComponent trialFeedback
      fillColor [set every repeat] = $trialFeedbackColour
      nVertices = 128
      opacity [set every repeat] = trialFeedbackOpacity
      shape = regular polygon...
      size = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = deg
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    PolygonComponent trialFixation
      fillColor = $[1,1,1]
      nVertices = 16
      shape = regular polygon...
      size = 0.1
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent trialResp
      allowedKeys = 'f','j'
      correctAns = $targetKey
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    SoundComponent trialSnare
      sound = sounds/snare.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisSnareVolume
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    SoundComponent trialHihat
      sound = sounds/hihat.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisHihatVolume
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    SoundComponent trialBass
      sound = sounds/kick.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisBassVolume
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    TextComponent redX
      color = red
      letterHeight = 2
      opacity [set every repeat] = redXOpacity
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = X
      units = deg
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  Routine cue
    CodeComponent cueCode
      Code Type = Auto->JS
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      Begin Experiment:
        thisHihatVolume = 0
        thisSnareVolume= 0
        thisBassVolume= 0
      Begin Routine:
        roundPoints = 0
        # Reset total RT and mean RT for this block
        totalRT = 0
        meanRT = 0

        # Block settings
        thisBlockType = blockTypes[iBlock]
        targetDuration = allTargets[thisBlockType]

        # Triggers
        cueBeatTrigger = baseCueBeatTrigger + thisBlockType
        readyTrigger = baseReadyTrigger + thisBlockType
        firstRespTrigger = baseFirstRespTrigger + thisBlockType
        earlyRespTrigger = baseEarlyRespTrigger + thisBlockType
        onTimeTrigger = baseOnTimeTrigger + thisBlockType
        lateRespTrigger = baseLateRespTrigger + thisBlockType
        redXTrigger = baseRedXTrigger + thisBlockType

        iSeq = iCue % 24

        if thisBlockType in [0,1,4,5,8,9]:
            thisHihatVolume = hihatVols0[iSeq]
            thisSnareVolume= snareVols0[iSeq]
            thisBassVolume= bassVols0[iSeq]
        elif thisBlockType in [2,3,6,7,10,11]:
            thisHihatVolume = hihatVols1[iSeq]
            thisSnareVolume= snareVols1[iSeq]
            thisBassVolume= bassVols1[iSeq]

        if thisSnareVolume:
            if thisBlockType in [0,2,4,6,8,10]:
                leftSquareColour = [1,1,1]
                rightSquareColour = [-1,-1,-1]
            elif thisBlockType in [1,3,5,7,9,11]:
                leftSquareColour = [-1,-1,-1]
                rightSquareColour = [1,1,1]
        else:
            if thisBlockType in [0,2,4,6,8,10]:
                leftSquareColour = [-1,-1,-1]
                rightSquareColour = [1,1,1]
            elif thisBlockType in [1,3,5,7,9,11]:
                leftSquareColour = [1,1,1]
                rightSquareColour = [-1,-1,-1]

        cueTextString = 'LISTEN\n\n' + allCueTextStrings[thisBlockType] + ' (' + bpmStr[thisBlockType] + ' bpm)'
        cueLoop.addData('trigger',cueBeatTrigger)
      Each Frame:
        # End routine at right time so the target rhythm is played
        if t > targetDuration:
            continueRoutine = False
      End Routine:
        iCue += 1
    ParallelOutComponent cuePort
      address = 0xD050
      startData = cueBeatTrigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = True
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    ImageComponent cueImage
      image = images/metronome-3372250_1280.png
      saveStartStop = False
      size = [0.8*176,0.8*256]
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    SoundComponent cueHihat
      saveStartStop = False
      sound = sounds/hihat.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisHihatVolume
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    SoundComponent cueSnare
      sound = sounds/snare.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisSnareVolume
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    SoundComponent cueBass
      sound = sounds/kick.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisBassVolume
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    TextComponent cueText
      letterHeight = 32
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cueTextString
      units = pix
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    PolygonComponent leftSpace
      fillColor [set every repeat] = $[1,1,1]
      pos = (-32, -128)
      shape = rectangle
      size = (16, 16)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent leftSquare
      fillColor [set every repeat] = $leftSquareColour
      pos = (-32, -128)
      shape = rectangle
      size = (16, 16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = pix
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    PolygonComponent rightSpace
      fillColor [set every repeat] = $[1,1,1]
      pos = (32, -128)
      shape = rectangle
      size = (16, 16)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rightSquare
      fillColor [set every repeat] = $rightSquareColour
      pos = (32, -128)
      shape = rectangle
      size = (16, 16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = pix
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  Routine instructions
    CodeComponent instCode
      Code Type = Auto->JS
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      Begin Experiment:
        # Note that there is an issue with python->js where LOOP.thisN stores
        # the total triaul count, not the current trial!
        # So we need these variables to store the trial number
        iInst = 0
        iCue = 0
        iTrial = 0
        iBlock = 0
        thisHihatVolume = 0
        thisSnareVolume= 0
        thisBassVolume= 0
        instFeedbackOpacity = 0

        # Triggers
        baseCueBeatTrigger = 1
        baseReadyTrigger = 21
        baseFirstRespTrigger = 41
        baseEarlyRespTrigger = 61
        baseOnTimeTrigger = 81
        baseLateRespTrigger = 101
        baseRedXTrigger = 121

        colour1 = [(27-127.5)/127.5,(158-127.5)/127.5,(119-127.5)/127.5]
        colour2 = [(217-127.5)/127.5,(95-127.5)/127.5,(2-127.5)/127.5]
        colour3 = [(117-127.5)/127.5,(112-127.5)/127.5,(179-127.5)/127.5]

        colourCode = int(expInfo['colourCode'])
        participant = int(expInfo['participant'])

        if colourCode == 0:
            colourCode = participant % 6

        if colourCode == 1:
            allColours = [colour1, colour2, colour3]
        elif colourCode == 2:
            allColours = [colour1, colour3, colour2]
        elif colourCode == 3:
            allColours = [colour2, colour1, colour3]
        elif colourCode == 4:
            allColours = [colour2, colour3, colour1]
        elif colourCode == 5:
            allColours = [colour3, colour1, colour2]
        elif colourCode == 0:
            allColours = [colour3, colour2, colour1]

        print(str(colourCode))
        print(str(allColours))

        earlyColour = allColours[0]
        onTimeColour = allColours[1]
        lateColour = allColours[2]

        # Task variables
        totalPoints = 0

        # Cue variables
        allCueTextStrings = ['fast','fast','fast','fast','medium','medium','medium','medium','slow','slow','slow','slow']
        cueTextString = ''

        # Target variables
        fastTarget = 0.4
        medTarget = 0.6
        slowTarget = 1.0
        #allTargets = [0.4, 0.6, 1,0.4, 0.6, 1,0.4, 0.6, 1,0.4, 0.6, 1] # in seconds, (150,100,60) in bpm
        allTargets = [0.4,0.4,0.4,0.4, 0.6, 0.6, 0.6, 0.6, 1, 1, 1, 1]
        targetMargins = [0.1,0.1,0.1,0.1,0.1,0.1,0.1,0.1,0.1,0.1,0.1,0.1]
        marginAdjust = 0.01
        targetDuration = 2
        bpmStr = ['150','150','150','150','100','100','100','100','60','60','60','60']

        # Stim variables (to dynamically set volume)
        hihatVols0 = [1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1]
        bassVols0 = [1,0,0,0,1,0,0,0,1,0,0,0,1,0,0,0,1,0,0,0,1,0,0,0]
        snareVols0 = [0,0,1,0,0,0,1,0,0,0,1,0,0,0,1,0,0,0,1,0,0,0,1,0]
        hihatVols1 = [1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1]
        bassVols1 = [1,0,0,0,0,0,1,0,0,0,0,0,1,0,0,0,0,0,1,0,0,0,0,0]
        snareVols1 = [0,0,0,1,0,0,0,0,0,1,0,0,0,0,0,1,0,0,0,0,0,1,0,0]
        leftSquareColour = [1,1,1]
        rightSquareColour = [1,1,1]

        # Block variables
        allBlocks = [0,1,2,3,4,5,6,7,8,9,10,11]
        set1= allBlocks
        set2= allBlocks
        set3= allBlocks
        set4= allBlocks
        shuffle(set1)
        shuffle(set2)
        shuffle(set3)
        shuffle(set4)
        blockTypes = set1 + set2
        print(str(blockTypes))
        # shuffle(blockTypes)
        nBlocks = len(blockTypes)
        thisBlockType = 0
        #trialsPerBlock = 72
        trialsPerBlock = 72

        # Within-trial variables
        deltaT = 0
        wasCorrect = 0
        outcome = 0 # 0 = early, 1 = on time, 2 = late
        trialFeedbackColour = [0,0,0]
        trialFeedbackOpacity = 1

        # Instruction variables
        instImageFile = 'images/drums-3330642_1280.png'
        instImageDim = [1280,762]
        inst1 = 'DRUM TRAINER\n\nWelcome! In each round, you will practice drumming at either a slow, medium, or fast tempo.\nPlay the drum by clicking the f or j key with your left or right index finger. Try it now!\n\nYou will start each round by listening to a sample rhythm. You will then try to reproduce the timing of the rhythm as closely as possible.\nThe closer you are to the sample rhythm, the more points you will receive\nPoints will be converted to £ at the end of the study at a rate of £0.01 per point\n\n(press \'n\' to proceed to the next screen)'
        inst2 = 'Additionally, you will have to press the f and j keys in a certain order (a sequence).\nWhile you listen the the sample rhythm before each round, pay attention to the white squares at the bottom of the screen.\nThese will be filled in during the rhythm to show you the left/right sequence.\nDuring the round, if you do not press the correct key in the sequence a red X will appear and you will lose a point.\n\n(press \'b\' to go back or \'n\' to proceed to the next screen)'
        inst3 = 'As you play the drums, keep your eyes on the white dot in the center of the display.\n\nWhen you press the correct button a coloured circle will appear to indicate whether you were EARLY, ON TIME, or LATE.\nSee below for the meaning of the colours\n\nYou will gain 2 points for every ON TIME respone and lose 1 point for every EARLY or LATE response\n\n(press \'b\' to go back or \'n\' to listen to the first rhythm)'
        allInst = [inst1,inst2,inst3]
        currentInst = 0
        isBeat = 0
      Begin Routine:
        # Stim settings for this trial
        iSeq = (iInst-1) % 24

        # Dynamically set volume
        if isBeat:
            thisHihatVolume = hihatVols0[iSeq]
            thisSnareVolume= snareVols0[iSeq]
            thisBassVolume= bassVols0[iSeq]
        else:
            thisHihatVolume = 0
            thisSnareVolume= 0
            thisBassVolume= 0

        if currentInst == 2:
            instFeedbackOpacity = 1
        else:
            instFeedbackOpacity = 0
      End Routine:
        # Check to see if the participant is trying out the drums
        if instResp.keys is not None and len(instResp.keys)>0:
            if 'f' in instResp.keys:
                isBeat = 1
                leftSquareColour = [-1,-1,-1]
                rightSquareColour = [1,1,1]
            elif 'j' in instResp.keys:
                isBeat = 1
                leftSquareColour = [1,1,1]
                rightSquareColour = [-1,-1,-1]
            if 'n' in instResp.keys:
                currentInst += 1
                isBeat = 0
                if currentInst > 2:
                    instLoop.finished=True
            elif 'b' in instResp.keys:
                currentInst -= 1
                isBeat = 0
                if currentInst < 0:
                    currentInst = 0

        # Increment instruction trial counter
        iInst += 1
    ImageComponent instImage
      image [set every repeat] = $instImageFile
      saveStartStop = False
      size [set every repeat] = $instImageDim
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    TextComponent instText
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $allInst[currentInst]
      units = deg
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    KeyboardComponent instResp
      allowedKeys = 'n','b','g','f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    SoundComponent instSnare
      hamming = False
      saveStartStop = False
      sound = sounds/snare.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisSnareVolume
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    SoundComponent instHihat
      saveStartStop = False
      sound = sounds/hihat.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisHihatVolume
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    SoundComponent instBass
      saveStartStop = False
      sound = sounds/kick.wav
      startVal [time (s)] = 0.0
      volume [set every repeat] = thisBassVolume
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    PolygonComponent instLSpace
      fillColor [set every repeat] = $[1,1,1]
      pos = (-32, -256)
      saveStartStop = False
      shape = rectangle
      size = (16, 16)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent instLSquare
      fillColor [set every repeat] = $leftSquareColour
      pos = (-32, -256)
      saveStartStop = False
      shape = rectangle
      size = (16, 16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = pix
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    PolygonComponent instRSpace
      fillColor [set every repeat] = $[1,1,1]
      pos = (32, -256)
      saveStartStop = False
      shape = rectangle
      size = (16, 16)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent instRSquare
      fillColor [set every repeat] = $rightSquareColour
      pos = (32, -256)
      saveStartStop = False
      shape = rectangle
      size = (16, 16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = pix
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    PolygonComponent earlyCircle
      fillColor = $earlyColour
      nVertices = 128
      opacity [set every repeat] = instFeedbackOpacity
      pos = (-4,-10)
      saveStartStop = False
      shape = regular polygon...
      size = 2
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent onTimeCircle
      fillColor = $onTimeColour
      nVertices = 128
      opacity [set every repeat] = instFeedbackOpacity
      pos = (0, -10)
      saveStartStop = False
      shape = regular polygon...
      size = 2
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent lateCircle
      fillColor = $lateColour
      nVertices = 128
      opacity [set every repeat] = instFeedbackOpacity
      pos = (4, -10)
      saveStartStop = False
      shape = regular polygon...
      size = 2
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent earlyText
      letterHeight = 0.5
      opacity [set every repeat] = instFeedbackOpacity
      pos = (-4,-8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Early
      units = deg
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    TextComponent onTimeText
      letterHeight = 0.5
      opacity [set every repeat] = instFeedbackOpacity
      pos = (0,-8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On Time
      units = deg
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    TextComponent lateText
      letterHeight = 0.5
      opacity [set every repeat] = instFeedbackOpacity
      pos = (4,-8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Late
      units = deg
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  Routine rest
    CodeComponent restCode
      Code Type = Auto->JS
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      Begin Routine:
        meanBPMStr = str(round((1/meanRT)*60))
        restTextString = 'Well done!\n\nTarget BPM: ' + bpmStr[thisBlockType] + '\nYour BPM: ' + meanBPMStr + '\n\nPoints this round: ' + str(roundPoints) + '\nTotal points: ' + str(totalPoints) + '\n\n(press \'n\' to begin another round)'
      End Routine:
        iBlock += 1
    TextComponent restText
      letterHeight = 32
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $restTextString
      units = pix
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    KeyboardComponent restResp
      allowedKeys = 'n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent restEarlyCircle
      fillColor = $earlyColour
      nVertices = 128
      opacity [set every repeat] = instFeedbackOpacity
      pos = (-4,-10)
      saveStartStop = False
      shape = regular polygon...
      size = 2
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent restOnTimeCircle
      fillColor = $onTimeColour
      nVertices = 128
      opacity [set every repeat] = instFeedbackOpacity
      pos = (0, -10)
      saveStartStop = False
      shape = regular polygon...
      size = 2
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent restLateCircle
      fillColor = $lateColour
      nVertices = 128
      opacity [set every repeat] = instFeedbackOpacity
      pos = (4, -10)
      saveStartStop = False
      shape = regular polygon...
      size = 2
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent restEarlyText
      letterHeight = 0.5
      opacity [set every repeat] = instFeedbackOpacity
      pos = (-4,-8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Early
      units = deg
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    TextComponent restOnTimeText
      letterHeight = 0.5
      opacity [set every repeat] = instFeedbackOpacity
      pos = (0,-8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = On Time
      units = deg
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    TextComponent restLateText
      letterHeight = 0.5
      opacity [set every repeat] = instFeedbackOpacity
      pos = (4,-8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Late
      units = deg
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  Routine ready
    CodeComponent readyCode
      Code Type = Auto->JS
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      Begin Experiment:
        readyTextString = '??'
        firstKeyCorrect = 0
        key1 = ''
        key2 = ''
      Begin Routine:
        #if thisBlockType in [0,1,2]:
        #   patternString = 'f,f,j,f,f,f,j,f,f,f,j,...'
        #elif thisBlockType in [6,7,8]:
        #    patternString = 'f,f,f,j,f,f,f,f,f,j,f,f,f,f,f,j,...'

        #readyTextString = 'Ready? Press f to begin drumming!\n\nRemember - try to reproduce the sample rhythm using the correct keys.\n\nHint: this rhythm starts like\n' + patternString
        readyTextString = 'Ready? Press f or j to begin drumming!\n\nRemember - try to reproduce the sample rhythm using the correct keys.'

        # What are the keys?
        if thisBlockType in [0,2,4,6,8,10]:
            key1 = 'f'
            key2 = 'j'
        elif thisBlockType in [1,3,5,7,9,11]:
            key1 = 'j'
            key2 = 'f'

        # What is the first target key?
        if thisBlockType in [0,1,4,5,8,9]:
            if snareVols0[0]:
                targetKey = key2
            else:
                targetKey = key1
        elif thisBlockType in [2,3,6,7,10,11]:
            if snareVols1[0]:
                targetKey = key2
            else:
                targetKey = key1
        else:
            print('error - block type not recognized')
            targetKey = ''

        blockLoop.addData('firstKey', targetKey)
      End Routine:
        if readyKey.corr:
            firstKeyCorrect = 1
        else:
            firstKeyCorrect = 0
    ParallelOutComponent readyPort
      address = 0xD050
      startData = readyTrigger
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.002
      syncScreen = True
      syncScreenRefresh = True
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    ImageComponent readyImage
      image = images/metronome-3372250_1280.png
      saveStartStop = False
      size = [0.8*176,0.8*256]
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent readyKey
      allowedKeys = 'f','j'
      correctAns = $targetKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent readyText
      letterHeight = 32
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $readyTextString
      units = pix
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  Routine preCue
    CodeComponent preCueCode
      Code Type = Auto->JS
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      Begin Experiment:
        iCue = 0
      Begin Routine:
        iCue = 0
Flow
  LoopInitiator instLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 801
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    Routine instructions
  LoopTerminator instLoop
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = nBlocks
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    Routine preCue
    LoopInitiator cueLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 24
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      Routine cue
    LoopTerminator cueLoop
    Routine ready
    LoopInitiator trialLoop loopType="TrialHandler"
      loopType = sequential
      nReps = trialsPerBlock
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      Routine trial
    LoopTerminator trialLoop
    Routine rest
  LoopTerminator blockLoop
